PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': '000', 'session': '00', 'order': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = SaveTheWorld
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine blockStartText
    CodeComponent code_blockStart
      Code Type = Auto->JS
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      Begin Routine:
        #determine radioactive source image
        sourceImageFile = os.path.join(imageRoot,sourceImage)
    ImageComponent radioactive_block_source
      image [set every repeat] = $sourceImageFile
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent text_sourceImage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please try to keep you eyes as fixed as possible on the centre of the screen.

        New source ahead:







        Press any key if you're ready to start.
    KeyboardComponent key_resp_blockStart
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent blockStart_trigger
      address = 0x4FF8
      register = EIO
      startData = blockStartTrig
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.05
      syncScreen = True
      syncScreenRefresh = True
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  Routine blockEndText
    CodeComponent code_blockRew
      Code Type = Auto->JS
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      Begin Routine:
        rewardFeedback = "£%.2f" %(totalReward)
    TextComponent textPause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Well done. In this block, you earned:






        Take a short break.
    TextComponent textReward
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $rewardFeedback
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    TextComponent textContinue
      letterHeight = 0.05
      startVal [time (s)] = 5.0
      text = Press any key to continue.
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    KeyboardComponent key_resp_blockEnd
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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    ParallelOutComponent blockEnd_reward_trigger
      address = 0x4FF8
      disabled = True
      register = EIO
      startData = blockEndTrig
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.05
      syncScreen = True
      syncScreenRefresh = True
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  Routine instructed_move
    CodeComponent code_move_i
      Code Type = Auto->JS
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      Begin Routine:
        training_loop_count = training_loop_count + 1

        if training_loop_count == 0:
            shieldRotation = 360;

        target_orientations = [163, 356, 271]

        target_orientation = target_orientations[training_loop_count]
      Each Frame:
        #first, find out if L/R keys have been *released*
        LRkeys_released = kb.getKeys(keyList=keys_move,clear=True,waitRelease=True)
        if len(LRkeys_released)>0: #if so, then flush out the keys one final time
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=True,waitRelease=False)
        else: #otherwise, put the currently pressed keys into a list, finishing with the most recently pressed
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=False,waitRelease=False)

        #if key is pressed, rotate cursor
        #using most recently pressed key
        if len(LRkeys_pressed)>0:
            if LRkeys_pressed[-1]==key_right:
                shieldRotation += ROTATION_SPEED;
            if LRkeys_pressed[-1]==key_left:
                shieldRotation -= ROTATION_SPEED;

        if shieldRotation%360 == target_orientation%360:
            continueRoutine = False
    PolygonComponent shield_move_i
      fillColor = white
      lineColor = $[0, 0, 0]
      ori [set every frame] = shieldRotation
      pos = (0, -0.5)
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0
      units = cm
      vertices = shieldCoords
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    PolygonComponent shield_centre_move_i
      fillColor = blue
      lineColor = blue
      lineWidth = 3
      ori [set every frame] = shieldRotation
      pos [set every frame] = (0, -0.5)
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0
      units = cm
      vertices = [[0, 0], [0, CIRCLE_RADIUS*1.1]]
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    PolygonComponent shield_bg_short_move_i
      fillColor [set every frame] = $[0, 0, 0]
      lineColor [set every frame] = $[0, 0, 0]
      ori [set every frame] = shieldRotation
      pos = (0, -0.5)
      shape = custom polygon...
      size = (1, 1)
      startVal [time (s)] = 0
      units = cm
      vertices [set every frame] = shieldCoords
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    PolygonComponent target_move_i
      fillColor = red
      lineColor = red
      lineWidth = 3
      ori [set every repeat] = target_orientation
      pos = (0, -0.5)
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0
      units = cm
      vertices = [[0, 0], [0, CIRCLE_RADIUS*1.1]]
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    ImageComponent radioactive_move_i
      image = images/radioactive1.png
      pos = (0, -0.5)
      size = (2, 2)
      startVal [time (s)] = 0
      units = cm
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    TextComponent text_move_i
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = You will now do some practice trials. Move the shield so that the radiation hits the shield in its centre.
      wrapWidth = 1.5
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  Routine practiceSize
    CodeComponent code_size
      Code Type = Auto->JS
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      Each Frame:
        UDkeys_pressed = kb.getKeys(keyList=keys_size,clear=True,waitRelease=False)

        if len(UDkeys_pressed)>0:
            if UDkeys_pressed[-1]==key_up:
                shieldDegrees += SHIELD_GROWTH_SPEED;
            if UDkeys_pressed[-1]==key_down:
                shieldDegrees -= SHIELD_GROWTH_SPEED;

        #set lower boundary on shieldWidth
        if shieldDegrees < minShieldDegrees:
            shieldDegrees = minShieldDegrees;

        #set upper boundary on shieldWidth
        if shieldDegrees > maxShieldDegrees:
            shieldDegrees = maxShieldDegrees;

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))
    PolygonComponent shield_size
      fillColor = white
      lineColor = $[0, 0, 0]
      ori = shieldRotation
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0
      units = cm
      vertices [set every frame] = shieldCoords
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    PolygonComponent shield_centre_size
      fillColor = blue
      lineColor = blue
      lineWidth = 3
      ori = shieldRotation
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0
      units = cm
      vertices = [[0, 0], [0, CIRCLE_RADIUS*1.1]]
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    PolygonComponent shield_bg_short_size
      fillColor [set every frame] = $[0, 0, 0]
      lineColor [set every frame] = $[0, 0, 0]
      ori = shieldRotation
      shape = custom polygon...
      size = (1, 1)
      startVal [time (s)] = 0
      units = cm
      vertices [set every frame] = shieldCoords
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    ImageComponent radio_size
      image = images/radioactive1.png
      size = (2, 2)
      startVal [time (s)] = 0
      units = cm
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    TextComponent text_size_s1
      letterHeight = 0.04
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        To change the shield size, you can use the "3" and "4" buttons on your response box. Try changing the shield size now!







        If you have understood how to change the shield size,
        press button "1" to advance to the next screen.
    TextComponent text_size_s2
      disabled = True
      letterHeight = 0.04
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        To change the shield size, you can use the "1" and "2" buttons on your response box. Try changing the shield size now!







        If you have understood how to change the shield size,
        press button "3" to advance to the next screen.
    KeyboardComponent key_resp_size_s1
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_size_s2
      allowedKeys = '3'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent sizeTraining_trigger
      address = 0x4FF8
      disabled = True
      register = EIO
      startData = 102
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.05
      syncScreen = True
      syncScreenRefresh = True
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  Routine trial
    CodeComponent code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #initialise variables that will be updated as experiment progresses
        shieldDegrees = 25; #because it needs to be predefined

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        #calculate the screen X and Y locations that correspond to the shield centre
        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        #load stimulusStream into NumPy array
        rootdir = os.getcwd()
        stimStreamPath = os.path.join(rootdir,'stimgen',blockFileName)
        storedStream_np = np.loadtxt(stimStreamPath,delimiter=",")

        shieldRotation = 360; #begin at top

        #calculate the total number of frames in the experiment
        nFrames = np.shape(storedStream_np)[0] - 1;
        currentFrame = 0;
        laserRotation = storedStream_np[0,1];

        #update variables to draw polygon
        laserXcoord = CIRCLE_RADIUS*cos(deg2rad(laserRotation));
        laserYcoord = CIRCLE_RADIUS*sin(deg2rad(laserRotation));

        hit_i = 0
        first_hit = 0

        triggerValue = 11
        sendTrigger = True
        #start by sending a trigger when subject presses a button
        sendResponseTriggers = True

        square_colour = 'black'

        top_amount_text = '£'+str(top_amount)
        bottom_amount_text = '£'+str(bottom_amount)

        bar_length_array = np.zeros(nFrames);
      Each Frame:
        #determine whether laser is crossing the shield
        if hit_i:
            hit_i = 0
        else:
            if first_hit:
                laser_long.setAutoDraw(True)

        if bar_length <= 0:
            bar_length = 0.5;
            top_amount = top_amount - 1;
            bottom_amount = bottom_amount - 1;
            top_amount_text = '£'+str(top_amount)
            bottom_amount_text = '£'+str(bottom_amount)

        if square_colour == 'black':
            colour_id = 1
        if square_colour == 'white':
            colour_id = 2

        #do not send a trigger on every frame, only if laser position changes or subject presses a button
        sendTrigger = False
        keyReleaseThisFrame = False
        ##win.callOnFlip(trialTrigger.setData, int(0))

        #first, find out if L/R keys have been *released*
        LRkeys_released = kb.getKeys(keyList=keys_move,clear=True,waitRelease=True)
        if len(LRkeys_released)>0: #if so, then flush out the keys one final time
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=True,waitRelease=False)
            triggerValue = 7
            sendTrigger = True
            #win.callOnFlip(trialTrigger.setData, int(triggerValue))
            keyReleaseThisFrame = True
        else: #otherwise, put the currently pressed keys into a list, finishing with the most recently pressed
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=False,waitRelease=False)

        UDkeys_pressed = kb.getKeys(keyList=keys_size,clear=True,waitRelease=False)

        #if key is pressed, rotate cursor
        #using most recently pressed key
        if len(LRkeys_pressed)>0:
            if LRkeys_pressed[-1]==key_right:
                shieldRotation += ROTATION_SPEED;
                newTriggerValue = 3
            if LRkeys_pressed[-1]==key_left:
                shieldRotation -= ROTATION_SPEED;
                newTriggerValue = 4
            if sendResponseTriggers:
                print(shieldRotation)
                triggerValue = newTriggerValue
                sendTrigger = True
                #win.callOnFlip(trialTrigger.setData, int(triggerValue))
                #stop triggering responses until key has been released again
                sendResponseTriggers = False

        if len(UDkeys_pressed)>0:
            if UDkeys_pressed[-1]==key_up:
                shieldDegrees += SHIELD_GROWTH_SPEED;
                triggerValue = 5
            if UDkeys_pressed[-1]==key_down:
                shieldDegrees -= SHIELD_GROWTH_SPEED;
                triggerValue = 6
            sendTrigger = True
            #win.callOnFlip(trialTrigger.setData, int(triggerValue))

        #set lower boundary on shieldWidth
        if shieldDegrees < minShieldDegrees:
            shieldDegrees = minShieldDegrees;

        #set upper boundary on shieldWidth
        if shieldDegrees > maxShieldDegrees:
            shieldDegrees = maxShieldDegrees;

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        if currentFrame<nFrames:
            laserRotation = storedStream_np[currentFrame,1];

        #calculate whether shield is currently hit by laser
        currentHit = (shieldRotation - laserRotation + shieldDegrees)%360 <= (2*shieldDegrees);

        #determine whether laser position has changed
        if currentFrame > 1:
            if storedStream_np[currentFrame,1] != storedStream_np[currentFrame-1,1]:
                #we only send a stimulus trigger if we don't already have a response to send
                if not sendTrigger:
                    #we'll send different stim change triggers depending on hit/no-hit
                    if currentHit:
                        triggerValue = 1
                    else:
                        triggerValue = 2

                    if colour_id == 1:
                        square_colour = 'white'
                    elif colour_id == 2:
                        square_colour = 'black'

                    sendTrigger = True
                    ##win.callOnFlip(trialTrigger.setData, int(triggerValue))

        #update the shieldRedness according to whether we are currently hitting/missing the shield
        if currentHit:
            if shieldDegrees == 25:
                laser_long_opacity = 0;
            if shieldDegrees == 45:
                laser_long_opacity = 0.1;
            if shieldDegrees == 65:
                laser_long_opacity = 0.3;

            bar_length = bar_length - (0.0001 - 0.0000555556*45/shieldDegrees);
            totalReward = totalReward - (0.0001 - 0.0000555556*45/shieldDegrees);
            red_bar_length = (0.0001 - 0.0000555556*45/shieldDegrees)*100;

            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];
            hit_i = 1
            first_hit = 1
        else:
            laser_long_opacity = 1

            laser_long.setAutoDraw(True)
            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];
            bar_length = bar_length - 0.0001;
            totalReward = totalReward - 0.0001;
            red_bar_length = 0.0001*100;

        if keyReleaseThisFrame:
            sendResponseTriggers = True

        if currentFrame<nFrames:
            saveData.append([blockID,currentFrame,laserRotation,shieldRotation,shieldDegrees,currentHit,totalReward,sendTrigger,triggerValue])
            currentFrame = currentFrame + 1;
        else:
            triggerValue = 99
            sendTrigger = True
            ##win.callOnFlip(trialTrigger.setData, int(triggerValue))
      End Routine:
        np.savetxt(saveFilename,saveData,delimiter=",",fmt="%s")
        ##win.callOnFlip(trialTrigger.setData, int(0))
    CodeComponent code_reset2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #run_trial()

        #initialise variables that will be updated as experiment progresses
        shieldDegrees = 25; #because it needs to be predefined

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        #calculate the screen X and Y locations that correspond to the shield centre
        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        #load stimulusStream into NumPy array
        rootdir = os.getcwd()
        stimStreamPath = os.path.join(rootdir,'stimgen',blockFileName)
        storedStream_np = np.loadtxt(stimStreamPath,delimiter=",")

        shieldRotation = 360; #begin at top

        #calculate the total number of frames in the experiment
        nFrames = np.shape(storedStream_np)[0] - 1;
        currentFrame = 0;
        laserRotation = storedStream_np[0,1];
        trueMean = storedStream_np[0,0];
        trueVariance = storedStream_np[0,2];

        #update variables to draw polygon
        laserXcoord = CIRCLE_RADIUS*cos(deg2rad(laserRotation));
        laserYcoord = CIRCLE_RADIUS*sin(deg2rad(laserRotation));

        hit_i = 0
        first_hit = 0

        triggerValue = 11
        sendTrigger = True
        #start by sending a trigger when subject presses a button
        sendResponseTriggers = True

        square_colour = 'black'

        if wins == 0:

            bar_length = 0.5;
            top_amount = 2;
            bottom_amount = 1;

            totalReward = 2;

            reward_change_colour = [1, -1, -1];
        else:

            top_amount = 4;
            bottom_amount = 3;

            totalReward = 3.5;
            reward_change_colour = [-1, -1, 1];

        top_amount_text = '£'+str(top_amount)
        bottom_amount_text = '£'+str(bottom_amount)

        unique, counts = np.unique(storedStream_np, return_counts=True);
        laser_on = min(counts);
        laser_frame_ct = 0;

        laser.setAutoDraw(False);
        laser_long.setAutoDraw(False);

        progress_bar_length = 0;
        pb_orientation = 0;
        pb_degrees = 0;
        pb_X=np.sin(np.arange(np.radians(-pb_degrees),np.radians(pb_degrees),np.radians(10)/20))*CIRCLE_RADIUS*1.1;
        pb_Y=np.cos(np.arange(np.radians(-pb_degrees),np.radians(pb_degrees),np.radians(10)/20))*CIRCLE_RADIUS*1.1;
        pb_X = np.concatenate(([0],pb_X));
        pb_Y = np.concatenate(([0],pb_Y));
        pb_coords = np.transpose(np.vstack((pb_X,pb_Y)))
      Each Frame:
        #determine whether laser is crossing the shield
        if hit_i:
            hit_i = 0
        else:
            if first_hit:
                laser_long.setAutoDraw(True)

        if wins == 0:
            if bar_length <= 0:
                bar_length = 0.5;
                top_amount = top_amount - 1;
                bottom_amount = bottom_amount - 1;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);

        if wins == 1:
            if bar_length >= 0.5:
                bar_length = 0.001;
                top_amount = top_amount + 1;
                bottom_amount = bottom_amount + 1;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);
            if bar_length <= 0:
                bar_length = 0.5;
                top_amount = top_amount - 1;
                bottom_amount = bottom_amount - 1;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);

        if totalReward <= 0:
            if wins == 0:
                bar_length = 0.5;
                top_amount = 1;
                bottom_amount = 0;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);

                totalReward = 1;
            if wins == 1:
                bar_length = 0.00001;
                red_bar_length = 0;
                top_amount = 1;
                bottom_amount = 0;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);

                totalReward = 0;

        if square_colour == 'black':
            colour_id = 1
        if square_colour == 'white':
            colour_id = 2

        #do not send a trigger on every frame, only if laser position changes or subject presses a button
        sendTrigger = False
        keyReleaseThisFrame = False
        ##win.callOnFlip(trialTrigger.setData, int(0))

        #first, find out if L/R keys have been *released*
        LRkeys_released = kb.getKeys(keyList=keys_move,clear=True,waitRelease=True)
        if len(LRkeys_released)>0: #if so, then flush out the keys one final time
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=True,waitRelease=False)
            triggerValue = 7
            sendTrigger = True
            #win.callOnFlip(trialTrigger.setData, int(triggerValue))
            keyReleaseThisFrame = True
        else: #otherwise, put the currently pressed keys into a list, finishing with the most recently pressed
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=False,waitRelease=False)

        UDkeys_pressed = kb.getKeys(keyList=keys_size,clear=True,waitRelease=False)

        #if key is pressed, rotate cursor
        #using most recently pressed key
        if len(LRkeys_pressed)>0:
            if LRkeys_pressed[-1]==key_right:
                shieldRotation += ROTATION_SPEED;
                newTriggerValue = 3
            if LRkeys_pressed[-1]==key_left:
                shieldRotation -= ROTATION_SPEED;
                newTriggerValue = 4
            if sendResponseTriggers:
                triggerValue = newTriggerValue
                sendTrigger = True
                #win.callOnFlip(trialTrigger.setData, int(triggerValue))
                #stop triggering responses until key has been released again
                sendResponseTriggers = False

        if len(UDkeys_pressed)>0:
            if UDkeys_pressed[-1]==key_up:
                shieldDegrees += SHIELD_GROWTH_SPEED;
                triggerValue = 5
            if UDkeys_pressed[-1]==key_down:
                shieldDegrees -= SHIELD_GROWTH_SPEED;
                triggerValue = 6
            sendTrigger = True
            #win.callOnFlip(trialTrigger.setData, int(triggerValue))

        #set lower boundary on shieldWidth
        if shieldDegrees < minShieldDegrees:
            shieldDegrees = minShieldDegrees;

        #set upper boundary on shieldWidth
        if shieldDegrees > maxShieldDegrees:
            shieldDegrees = maxShieldDegrees;

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        if currentFrame<nFrames:
            laserRotation = storedStream_np[currentFrame,1];
            trueMean = storedStream_np[currentFrame,0];
            trueVariance = storedStream_np[currentFrame,2];
            if currentFrame > 0:
                if storedStream_np[currentFrame, 1] != storedStream_np[currentFrame - 1, 1]:
                    laser_frame_ct = 0;
                else:
                    laser_frame_ct = laser_frame_ct + 1;

                if laser_frame_ct <= laser_on:
                    laser.setAutoDraw(True);
                    laser_long.setAutoDraw(True);
                else:
                    laser.setAutoDraw(False);
                    laser_long.setAutoDraw(False);

        #calculate whether shield is currently hit by laser
        currentHit = (shieldRotation - laserRotation + shieldDegrees)%360 <= (2*shieldDegrees);

        #determine whether laser position has changed
        if currentFrame > 1:
            if storedStream_np[currentFrame,1] != storedStream_np[currentFrame-1,1]:
                #we only send a stimulus trigger if we don't already have a response to send
                if not sendTrigger:
                    #we'll send different stim change triggers depending on hit/no-hit
                    if currentHit:
                        triggerValue = 1
                    else:
                        triggerValue = 2

                    if colour_id == 1:
                        square_colour = 'white'
                    elif colour_id == 2:
                        square_colour = 'black'

                    sendTrigger = True
                    ##win.callOnFlip(trialTrigger.setData, int(triggerValue))

        #update the shieldRedness according to whether we are currently hitting/missing the shield
        if currentHit:
            if shieldDegrees == 25:
                laser_long_opacity = 0;
            if shieldDegrees == 45:
                laser_long_opacity = 0.1;
            if shieldDegrees == 65:
                laser_long_opacity = 0.3;
            if wins == 0:
                bar_length = bar_length - (0.0001 - 0.0000555556*45/shieldDegrees);
                totalReward = totalReward - 2*(0.0001 - 0.0000555556*45/shieldDegrees);
                red_bar_length = (0.0001 - 0.0000555556*45/shieldDegrees)*100;
            if wins == 1:
                if shieldDegrees == 25:
                    bar_length = bar_length + 0.00003;
                    totalReward = totalReward + 2*0.00003;
                    red_bar_length = 0.00003*100;
                    reward_change_colour = [-1, 1, -1];

                if shieldDegrees == 45:
                    bar_length = bar_length;
                    totalReward = totalReward;
                    red_bar_length = 0;
                    reward_change_colour = [-1, -1, 1];

                if shieldDegrees == 65:
                    if totalReward > 0:
                        bar_length = bar_length - 0.00003;
                        totalReward = totalReward - 2*0.00003;
                        red_bar_length = 0.00003*100;
                    else:
                        bar_length = 0;
                        totalReward = 0;
                        red_bar_length = 0;
                    reward_change_colour = [1, -1, -1];

            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];
            hit_i = 1
            first_hit = 1
        else:
            laser_long_opacity = 1

            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];

            if totalReward > 0:
                bar_length = bar_length - 0.0001;
                totalReward = totalReward - 2*0.0001;
                red_bar_length = 0.0001*100;
            else:
                bar_length = 0.00001;
                totalReward = 0;
                red_bar_length = 0;

            if wins == 1:
                reward_change_colour = [1, -1, -1];

        if keyReleaseThisFrame:
            sendResponseTriggers = True

        if currentFrame<nFrames:
            saveData.append([blockID,currentFrame,laserRotation,shieldRotation,shieldDegrees,currentHit,totalReward,sendTrigger,triggerValue,trueMean,trueVariance,volatility])
            currentFrame = currentFrame + 1;
        else:
            triggerValue = 99
            sendTrigger = True
            ##win.callOnFlip(trialTrigger.setData, int(triggerValue))

        progress_bar_length = progress_bar_length + 0.8/nFrames;

        pb_orientation = pb_orientation + (360/nFrames)/2;
        pb_degrees = pb_degrees + (360/nFrames)/2;
        pb_X=np.sin(np.arange(np.radians(-pb_degrees),np.radians(pb_degrees),np.radians(10)/20))*CIRCLE_RADIUS*1.1;
        pb_Y=np.cos(np.arange(np.radians(-pb_degrees),np.radians(pb_degrees),np.radians(10)/20))*CIRCLE_RADIUS*1.1;
        pb_X = np.concatenate(([0],pb_X));
        pb_Y = np.concatenate(([0],pb_Y));
        pb_coords = np.transpose(np.vstack((pb_X,pb_Y)))
      End Experiment:
        print(totalReward_tot)
      End Routine:
        totalReward_tot = totalReward_tot + totalReward;
        totalReward_text = '£'+str(totalReward)

        np.savetxt(saveFilename,saveData,delimiter=",",fmt="%s")
        ##win.callOnFlip(trialTrigger.setData, int(0))
    CodeComponent code_changeRewPos
      Code Type = Auto->JS
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      Begin Routine:
        # this is the actual experiment
        phaseN = 1

        #load stimulusStream into NumPy array
        block_path = sequenceRoot + blockFileName
        f = open(block_path, 'r')
        storedStream_np = []
        for line in f:
            words = line.split(',')
            storedStream_np.append((words[0], words[1], words[2]))

        #calculate the total number of frames in this block
        nFrames = len(storedStream_np) - 2 # try debug IndexError:list index out of range
        currentFrame = 0

        #the ValueError: could not convert string to float error originates here
        #need to start reading from the 2nd row rather than the 1st row (with header text)
        #let's get rid of the first row since it's giving us headaches
        storedStream_np.pop(0)

        trueMean = float(storedStream_np[0][0])
        laserRotation = float(storedStream_np[0][1])
        trueVariance = float(storedStream_np[0][2])

        #initialise variables that will be updated as experiment progresses
        hit_i = 0
        first_hit = 0

        # send a trigger to mark the start of a main block
        triggerValue = triggers['begin_main']
        sendTrigger = True
        send_trigger(triggerValue)
        #start by sending a trigger when subject presses a button
        sendResponseTriggers = True
        totalReward = 1;

        shieldDegrees = 20; #because it needs to be predefined
        shieldRotation = 360 #begin at top

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        #calculate the screen X and Y locations that correspond to the shield centre
        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        #update variables to draw polygon
        laserXcoord = CIRCLE_RADIUS*cos(deg2rad(laserRotation));
        laserYcoord = CIRCLE_RADIUS*sin(deg2rad(laserRotation));

        unique, counts = np.unique(storedStream_np, return_counts=True);
        laser_on = min(counts);
        laser_frame_ct = 0;

        laser.setAutoDraw(False);
        laser_long.setAutoDraw(False);

        #progress circle variables
        pc_orientation = 0;
        pc_degrees = 0;
        pc_X=np.sin(np.arange(np.radians(-pc_degrees),np.radians(pc_degrees),np.radians(10)/20))*CIRCLE_RADIUS*1.1;
        pc_Y=np.cos(np.arange(np.radians(-pc_degrees),np.radians(pc_degrees),np.radians(10)/20))*CIRCLE_RADIUS*1.1;
        pc_X = np.concatenate(([0],pc_X));
        pc_Y = np.concatenate(([0],pc_Y));
        pc_coords = np.transpose(np.vstack((pc_X,pc_Y)))
      Each Frame:
        #determine whether laser is crossing the shield
        if hit_i:
            hit_i = 0
        else:
            if first_hit:
                laser_long.setAutoDraw(True)

        if totalReward <= 0:
            totalReward = 0.1;

        #do not send a trigger on every frame, only if laser position changes or subject presses a button
        sendTrigger = False
        keyReleaseThisFrame = False
        triggerValue = 0
        send_trigger(triggerValue)
        #win.callOnFlip(trialTrigger.setData, int(0))

        #first, find out if L/R keys have been *released*
        LRkeys_released = kb.getKeys(keyList=keys_move,clear=True,waitRelease=True)
        if len(LRkeys_released)>0: #if so, then flush out the keys one final time
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=True,waitRelease=False)
            triggerValue = triggers['key_release']
            sendTrigger = True
            send_trigger(triggerValue)
            #win.callOnFlip(trialTrigger.setData, int(triggerValue))
            keyReleaseThisFrame = True
        else: #otherwise, put the currently pressed keys into a list, finishing with the most recently pressed
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=False,waitRelease=False)

        #if key is pressed, rotate cursor
        #using most recently pressed key
        if len(LRkeys_pressed)>0:
            if LRkeys_pressed[-1]==key_right:
                shieldRotation += ROTATION_SPEED;
                newTriggerValue = triggers['key_right']
            if LRkeys_pressed[-1]==key_left:
                shieldRotation -= ROTATION_SPEED;
                newTriggerValue = triggers['key_left']
            if sendResponseTriggers:
                triggerValue = newTriggerValue
                sendTrigger = True
                send_trigger(triggerValue)
                #win.callOnFlip(trialTrigger.setData, int(triggerValue))
                #stop triggering responses until key has been released again
                sendResponseTriggers = False

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        shieldX = np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY = np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        if currentFrame<nFrames:
            laserRotation = float(storedStream_np[currentFrame][1])#storedStream_np[currentFrame,1];
            trueMean = float(storedStream_np[currentFrame][0])#storedStream_np[currentFrame,0];
            trueVariance = float(storedStream_np[currentFrame][2])#storedStream_np[currentFrame,2];
            if currentFrame > 0:
                if float(storedStream_np[currentFrame][1]) != float(storedStream_np[currentFrame-1][1]):#storedStream_np[currentFrame - 1, 1]:
                #if currentFrame > 1:
                    laser_frame_ct = 0;
                else:
                    laser_frame_ct = laser_frame_ct + 1;

                if laser_frame_ct <= laser_on:
                    laser.setAutoDraw(True);
                    laser_long.setAutoDraw(True);
                else:
                    laser.setAutoDraw(False);
                    laser_long.setAutoDraw(False);

        #calculate whether shield is currently hit by laser
        currentHit = (shieldRotation - laserRotation + shieldDegrees)%360 <= (2*shieldDegrees);

        #determine whether laser position has changed
        if currentFrame == 0:
            if not sendTrigger:
                #we'll send different stim change triggers depending on hit/no-hit
                if currentHit:
                    triggerValue = triggers['laser_hit']
                else:
                    triggerValue = triggers['laser_miss']

                sendTrigger = True
                send_trigger(triggerValue)
                #win.callOnFlip(trialTrigger.setData, int(triggerValue))

            if currentHit:
                totalReward = totalReward;
                hit_i = 1;
                first_hit = 1;
            else:
                if totalReward > 0:
                    totalReward = totalReward - lossFactor;
                else:
                    totalReward = 0;

        if currentFrame > 0:
            if float(storedStream_np[currentFrame][1]) != float(storedStream_np[currentFrame-1][1]):
                #we only send a stimulus trigger if we don't already have a response to send
                if not sendTrigger:
                    #we'll send different stim change triggers depending on hit/no-hit
                    if currentHit:
                        triggerValue = triggers['laser_hit']
                    else:
                        triggerValue = triggers['laser_miss']

                    sendTrigger = True
                    send_trigger(triggerValue)
                    #win.callOnFlip(trialTrigger.setData, int(triggerValue))

                if currentHit:
                    totalReward = totalReward;
                    hit_i = 1;
                    first_hit = 1;
                else:
                    if totalReward > 0:
                        totalReward = totalReward - lossFactor;
                    else:
                        totalReward = 0;

        #update the shieldRedness according to whether we are currently hitting/missing the shield
        if currentHit:
            laser_long_opacity = 0;
            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];
        else:
            laser_long_opacity = 1
            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];

        if keyReleaseThisFrame:
            sendResponseTriggers = True

        if currentFrame<nFrames:
            saveData.append([phaseN,blockID,currentFrame,laserRotation,
            shieldRotation,shieldDegrees,currentHit,totalReward,
            sendTrigger,triggerValue,trueMean,trueVariance,volatility,
            toneTrig,toneVolatility,toneIndex,toneEndFrame])
            currentFrame = currentFrame + 1;
        else:
            triggerValue = triggers['last_frame']
            sendTrigger = True
            send_trigger(triggerValue)
            #win.callOnFlip(trialTrigger.setData, int(triggerValue))

        pc_orientation = pc_orientation + (360/nFrames)/2;
        pc_degrees = pc_degrees + (360/nFrames)/2;
        pc_X=np.sin(np.arange(np.radians(-pc_degrees),np.radians(pc_degrees),np.radians(10)/20))*CIRCLE_RADIUS*1.1;
        pc_Y=np.cos(np.arange(np.radians(-pc_degrees),np.radians(pc_degrees),np.radians(10)/20))*CIRCLE_RADIUS*1.1;
        pc_X = np.concatenate(([0],pc_X));
        pc_Y = np.concatenate(([0],pc_Y));
        pc_coords = np.transpose(np.vstack((pc_X,pc_Y)));
      End Routine:
        totalReward_tot = totalReward_tot + totalReward;
        totalReward_text = "£%.2f" %(totalReward);

        # save the output data for this block
        np.savetxt(saveFilename,saveData,delimiter=",",fmt="%s")
        #win.callOnFlip(trialTrigger.setData, int(0))
        triggerValue = 0;
        send_trigger(triggerValue)
        sendTrigger = False;
    PolygonComponent harmless_area
      fillColor = $[0, 0, 0]
      lineColor = $[0, 0, 0]
      shape = circle
      size = (6.6, 6.6)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
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    PolygonComponent shield
      fillColor [set every frame] = $shieldColour
      lineColor [set every frame] = $[0, 0, 0]
      ori [set every frame] = shieldRotation
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices [set every frame] = shieldCoords
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    PolygonComponent shield_centre
      fillColor = blue
      lineColor = blue
      lineWidth = 3
      ori [set every frame] = shieldRotation
      pos [set every frame] = (0, 0)
      shape = custom polygon...
      size = (1, 1)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices = [[0, 0], [0, CIRCLE_RADIUS*1.2]]
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    PolygonComponent shield_bg_short
      fillColor [set every frame] = $[0, 0, 0]
      lineColor [set every frame] = $[0, 0, 0]
      ori [set every frame] = shieldRotation
      shape = custom polygon...
      size = (1, 1)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices [set every frame] = shieldCoords
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    PolygonComponent laser
      fillColor = red
      lineColor = red
      lineWidth = 10
      ori [set every frame] = laserRotation
      pos [set every repeat] = (0, 0)
      shape = custom polygon...
      size [set every repeat] = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices [set every frame] = [[0, 0], [0, CIRCLE_RADIUS*1.1]]
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    PolygonComponent laser_long
      fillColor = red
      lineColor = red
      lineWidth = 10
      opacity [set every frame] = laser_long_opacity
      ori [set every frame] = laserRotation
      pos [set every repeat] = (0, 0)
      shape = custom polygon...
      size [set every repeat] = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices [set every frame] = [[0, 0], [0, CIRCLE_RADIUS*1.4]]
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    PolygonComponent progress_bar
      fillColor = white
      lineColor = green
      lineWidth = 10
      ori [set every frame] = pc_orientation
      shape = custom polygon...
      size = (0.3, 0.3)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices [set every frame] = pc_coords
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    ImageComponent radioactive
      color = $[1, 1, 1]
      image [set every repeat] = $sourceImageFile
      size = (2, 2)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
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    ParallelOutComponent trialTrigger
      address = 0x4FF8
      durationEstim = 0.01
      register = EIO
      startData = $triggerValue
      startEstim = 0
      startVal [condition] = $sendTrigger==True
      stopData = 0
      stopVal [duration (frames)] = 0.5
      syncScreen = True
      syncScreenRefresh = True
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    PolygonComponent square_diode
      disabled = True
      fillColor [set every frame] = black
      lineColor [set every frame] = black
      pos [set every frame] = hgf/404
      shape = rectangle
      size = (0.0625, 0.0625)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
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    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      disabled = True
      startVal [frame N] = 0
      stopVal [frame N] = nFrames
      syncScreenRefresh = False
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    CodeComponent code_mmn
      Code Type = Auto->JS
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      Begin Routine:
        #initialise some things
        toneOnsets=[]
        ISIs=[]

        # make tone sequence of S and Ds
        toneFilePath = "sequences/"+toneSeqFileName;

        #load tone stimuli stream into NumPy array
        f = open(toneFilePath, 'r');
        toneStream_np = [];
        for line in f:
            tones = line.split(',');
            toneStream_np.append(tones[0].strip());

        #  tone entry 0 is variable name, start at 1
        toneIndex = 1
        nTones = len(toneStream_np)-1
        toneEndFrame = 0

        # current tone
        toneCurr = toneStream_np[toneIndex]
        if toneCurr == "1":
            lastTone = 1
        else:
            lastTone = 2

        # define the two tones
        global tone1
        global tone2
        tone1 = sound.Sound(440, secs=0.05, stereo=True, hamming=True,
                syncToWin=True,  name='sound_short')
        tone1.setVolume(1)
        tone2 = sound.Sound(440, secs=0.1, stereo=True, hamming=True,
               syncToWin=True, name='sound_long')
        tone2.setVolume(1)

        # ISIs corresponding to tones, in frames
        # isi = soa - toneDuration
        # isi1 = 450-100 *60/1000
        isi1 = 24
        # isi2 = 450-500 *60/1000
        isi2 = 21

        # start with no tone and no ISI
        toneIsPlaying = False
        toneIsWaiting = False
        toneTrig = 0

        # start with frame 0
        iFrame = 0
      Each Frame:
        # we want to present the tone every
        # X seconds for the duration of the trial
        # if the sound is not currently playing

        if phaseN > 0:
            iFrame = iFrame +1
            if not toneIsPlaying and not toneIsWaiting:
                # pick how long we will wait for
                if lastTone == 1:
                    thisISI = isi1-2
                    # this is in frames
                    # we correct for 2 frames as wait a little longer
                    # before stopping the tone (see below)
                else:
                    thisISI = isi2-2
                #print('thisISI', thisISI)
                ISIs.append(thisISI)
                thisOnset = iFrame +thisISI
                #we are waiting for the sound to play
                toneIsWaiting = True
                toneTrig = 0
            elif not toneIsPlaying and toneIsWaiting:
                if iFrame >= thisOnset:
                    #getTone()
                    print('playing')
                    if toneCurr == "1":
                        tone1.play()
                        toneTrig = triggers['tone_1']
                        lastTone = 1
                    elif toneCurr == "2":
                        tone2.play()
                        toneTrig = triggers['tone_2']
                        lastTone = 2
                    toneOnsets.append(iFrame)
                    send_trigger(toneTrig)
                    toneIsPlaying = True
                    toneIsWaiting = False
            elif toneIsPlaying:
                toneTrig = 0
                if toneCurr == "1":
                    if iFrame >= thisOnset + tone1.secs*screen_refreshRate +1:
                        toneEndFrame = iFrame
                        if toneIndex < nTones:
                            toneIndex += 1
                            print('tone number:')
                            print(toneIndex)
                            toneCurr = toneStream_np[toneIndex]
                            tone1.stop()
                            toneIsPlaying = False
                        else:
                            # we have reached the end of the tone list
                            tone1.stop()
                            continueRoutine = False
                elif toneCurr == "2":
                    if iFrame >= thisOnset + tone2.secs*screen_refreshRate +1:
                        toneEndFrame = iFrame
                        if toneIndex < nTones:
                            toneIndex += 1
                            print('tone number:')
                            print(toneIndex)
                            toneCurr = toneStream_np[toneIndex]
                            tone2.stop()
                            toneIsPlaying = False
                        else:
                            tone2.stop()
                            continueRoutine = False

            # end the routine if the trial duration has been reached
            if currentFrame > nFrames:
                toneIsPlaying = False
                toneIsWaiting = False
                continueRoutine = False
  Routine sizeExamples
    TextComponent text_size_examples
      letterHeight = 0.04
      pos = (0, 0.23)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Remember that you can increase your shield size to capture radiation within a larger range.

        However, this comes at a cost: your shield becomes less efficient. If you catch radiation with a larger shield, some amount of radiation will still pass through and reach Earth.

        Below, you can see the shielding efficiency of
        a small, medium, and large shield:
    TextComponent text_size_advance
      letterHeight = 0.04
      pos = (0, -0.36)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
      wrapWidth = 1.5
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    ImageComponent shield_all_sizes
      image = images/shield_sml.png
      pos = (0, -0.15)
      size = (1.2, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_size_examples
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sizeExamples_1
    TextComponent text_size_examples_2
      letterHeight = 0.04
      pos = (0, 0.23)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        It is not only about catching the laser with the shield: the closer you place the centre of the shield to the laser, the less damage the latter does. The shield will let less and less radiations through, the closer the laser is to its centre, making the laser less and less visible. However, a larger shield lets more radiations through than a small one.

        You can see differences in laser visibility in the examples below.
    TextComponent text_size_advance_2
      letterHeight = 0.04
      pos = (0, -0.34)
      startVal [time (s)] = 0.0
      text = When you are ready to advance, press any button.
      wrapWidth = 1.5
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    ImageComponent shield_small_2
      image = images/shield_small_vsb.png
      pos = (-0.4, -0.13)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent shield_medium_2
      image = images/shield_medium_vsb.png
      pos = (0, -0.13)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent shield_large_2
      image = images/shield_large_vsb.png
      pos = (0.4, -0.13)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_size_examples_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_2
    TextComponent text_instructions_2
      letterHeight = 0.04
      pos = (0, 0.03)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Here you see one substance in the centre of the screen, its red radiation beam, and a white absorbing shield. In this example, the shield is not in the right position and thus the beam is not stopped and damages Earth.
        ​









        Your task is to manoeuvre the shield to catch as many emissions as possible. Press any key to continue.
    ImageComponent shield_miss_earth
      image = images/shield_miss_earth.png
      size = (0.4, 0.373)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_i2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine radio_colours
    ImageComponent radioactive_colour1
      image = images/radioactive3.png
      pos = (-0.2, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent radioactive_colour2
      image = images/radioactive2.png
      pos = (0.2, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_colours
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will encounter two different radioactive sources:
        A red and a blue source.







        The difference between these sources is how often they change their emission angle over time, and therefore how often you will have to adjust your shield position. One of the sources will change its main angle of attack more often, whereas the other will remain stable for longer.

        This game has 4 blocks. You will encounter each source twice.

        Press button "3" to continue.
    KeyboardComponent key_resp_colours
      allowedKeys = '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine reward
    TextComponent text_reward
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In every block of this game, your reward for saving the world from this radiation starts off at £1. The more radiation you let through, the more reward you lose.

        Try to keep as much of that £1 as you can by catching as many beams as you can. After every block, you will receive feedback about how much reward you have earned in the previous block.

        Each block will last 3 minutes. A green circle will grow around the radioactive source, indicating how much time has passed. When the green circle is complete, the block is over.

        Press any key to continue.
    KeyboardComponent key_resp_reward
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine transparence
    ImageComponent shield_as_transparence
      image = images/shield_sml.png
      pos = (0, 0.03)
      size = (1.2, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_transparence
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Remember:
        Because larger shields let some radiation through, you will still lose
        a small amount of your reward even if you catch the radiation.








        Your task is to save the world from this harmful substance,
        and keep as much of your reward by doing this!

        Ready?
        Press any button to start playing the game.
    KeyboardComponent key_resp_transparence
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sessionEndText
    CodeComponent code_totRew
      Code Type = Auto->JS
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      Begin Routine:
        totRew_text = "£%.2f" %(totalReward_tot);
    TextComponent textEndSession
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Well done. You completed this task.
        Your total reward for saving the world is:




        Take a break.
    TextComponent finalReward_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $totRew_text
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    ParallelOutComponent end_trigger
      address = 0x4FF8
      disabled = True
      register = EIO
      startData = expEndTrig
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.05
      syncScreen = True
      syncScreenRefresh = True
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  Routine instructions_practiceBlock
    TextComponent text_practiceBlock
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will now do a short practice block of the task. This block will only last 1 minute.

        As in the real game, the source will emit radiation, but the main angle of attack might change over time, so that you have to keep monitoring the beams and decide when to re-position your shield.

        You will see a reward bar on the right of the screen, which shows you how you lose money whenever a beam remains uncaught, but you will not actually earn any money during this practice. Remember to use the '1' and '2' buttons to navigate your shield.

        Press any key to start the practice block.
    KeyboardComponent key_resp_practiceBlock
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_game
    CodeComponent code_start
      Code Type = Auto->JS
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      Begin Experiment:
        # counters/setup
        phaseN = 0
        send_triggers = True

        # import modules
        import numpy as np
        import os

        # paths and filenames
        # where sequences are stored
        sequenceRoot = 'sequences/'
        dataRoot = 'data/'
        imageRoot = 'images/'
        # retrieve the current session csv file
        sessionFileName = (sequenceRoot + "cogpsy_main_v1_order"
            + str(expInfo['order']) + "/session_s1_main_v1.csv")
        practiceBlockFile = "practice_v1_block1.csv"

        # initialise list containing data to be saved
        saveData = [["phase","blockID","currentFrame","laserRotation",
            "shieldRotation","shieldDegrees","currentHit","totalReward",
            "sendTrigger","triggerValue","trueMean","trueVariance",
            "volatility","toneTrigger","toneVolatility","toneIndex","toneEndFrame"]];
        saveFilename = (dataRoot + "sub-" + str(expInfo['participant']) +
            "ses-" + str(expInfo['session']) + "_task-laser.csv")

        # hide the mouse
        win.mouseVisible = False

        # keyboard constants
        kb = keyboard.Keyboard()
        keys_move = ['2', '1']
        key_right = '2'
        key_left = '1'

        # set constants for the experiment
        screen_refreshRate = win.getActualFrameRate()
        ROTATION_SPEED = 1
        CIRCLE_RADIUS = 3

        # initialise variables that will be updated as experiment progresses
        # shield variables
        shieldDegrees = 40 #because it needs to be predefined
        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5

        #calculate the screen X and Y locations that correspond to the shield centre
        shieldX = np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1
        shieldY = np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1
        shieldX = np.concatenate(([0],shieldX))
        shieldY = np.concatenate(([0],shieldY))
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        shieldRotation = 360; #begin at top

        #reward variables
        totalReward_tot = 0
        lossFactor = 0.003
        totalReward_text = ''

        # reward bar variables
        red_bar_length = 0
        red_bar_length = 0
        bar_length = 0.5
        reward_change_colour = [1, -1, -1]
        top_amount_text = ''
        bottom_amount_text = ''
        #lossFactor = 0.003

        #progress circle variables
        pc_orientation = 0;
        pc_degrees = 0;
        pc_X=np.sin(np.arange(np.radians(-pc_degrees),np.radians(pc_degrees),np.radians(10)/20))*CIRCLE_RADIUS*1.1;
        pc_Y=np.cos(np.arange(np.radians(-pc_degrees),np.radians(pc_degrees),np.radians(10)/20))*CIRCLE_RADIUS*1.1;
        pc_X = np.concatenate(([0],pc_X));
        pc_Y = np.concatenate(([0],pc_Y));
        pc_coords = np.transpose(np.vstack((pc_X,pc_Y)))

        hgf = 0;

        # triggers
        triggers = dict(
            exp_start=100,
            exp_end=101,
            block_start=80,
            block_end=90,
            last_frame=99,
            laser_hit=10,
            laser_miss=20,
            key_right=30,
            key_left=40,
            key_release=50,
            tone_1=1,
            tone_2=2,
            begin_pract=60,
            begin_main=70
        )

        # Define function for sending triggers during the main trial loop
        if send_triggers:
            def send_trigger(triggerValue):
                """
                code: expects an integer code (up to a maximum of 127, because of the serial port being weird)to send to the EEG)
                """
                # actual sending of trigger looks like this
                win.callOnFlip(trialTrigger.setData, int(triggerValue))
        else:
            def send_trigger(code):
                print('sending trigger: ' + str(code))

        # Define function for sending triggers during the practice block
        if send_triggers:
            def send_trigger_pract(triggerValue):
                """
                code: expects an integer code (up to a maximum of 127, because of the serial port being weird)to send to the EEG)
                """
                # actual sending of trigger looks like this
                win.callOnFlip(trialTrigger_pract.setData, int(triggerValue))
        else:
            def send_trigger_pract(code):
                print('sending trigger: ' + str(code))

        # exp_start and _end triggers as well as block_start and _end
        # triggers will be sent via their trigger components
        expStartTrig = triggers['exp_start']
        expEndTrig = triggers['exp_end']
        blockStartTrig = triggers['block_start']
        blockEndTrig = triggers['block_end']
    TextboxComponent title
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0, 0.35)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Save-the-world task
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    TextComponent text_instructions_1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Welcome to the Save-the-world game!

        Mysterious radioactive sources have just landed on Earth and are emitting radiation that is harmful to our planet.

        Your task is to catch the radiation beams with an absorbing shield. You will have to navigate the shield and position it wisely to minimise the damage caused by these sources. Help us save the world!

        Press any key to continue.
    KeyboardComponent key_resp_i1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent instructions_trigger
      address = 0x4FF8
      register = EIO
      startData = expStartTrig
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.05
      syncScreen = True
      syncScreenRefresh = True
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  Routine practice_move
    CodeComponent code_move
      Code Type = Auto->JS
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      Begin Routine:
        shieldRotation = 0; #begin at top
      Each Frame:
        #first, find out if L/R keys have been *released*
        LRkeys_released = kb.getKeys(keyList=keys_move,clear=True,waitRelease=True)
        if len(LRkeys_released)>0: #if so, then flush out the keys one final time
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=True,waitRelease=False)
        else: #otherwise, put the currently pressed keys into a list, finishing with the most recently pressed
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=False,waitRelease=False)

        #if key is pressed, rotate cursor
        #using most recently pressed key
        if len(LRkeys_pressed)>0:
            if LRkeys_pressed[-1]==key_right:
                shieldRotation += ROTATION_SPEED;
            if LRkeys_pressed[-1]==key_left:
                shieldRotation -= ROTATION_SPEED;
    PolygonComponent shield_move
      fillColor = white
      lineColor = $[0, 0, 0]
      ori [set every frame] = shieldRotation
      pos = (0, -0.5)
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0
      units = cm
      vertices = shieldCoords
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    PolygonComponent shield_centre_move
      fillColor = blue
      lineColor = blue
      lineWidth = 3
      ori [set every frame] = shieldRotation
      pos [set every frame] = (0, -0.5)
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0
      units = cm
      vertices = [[0, 0], [0, CIRCLE_RADIUS*1.1]]
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    PolygonComponent shield_bg_short_move
      fillColor [set every frame] = $[0, 0, 0]
      lineColor [set every frame] = $[0, 0, 0]
      ori [set every frame] = shieldRotation
      pos = (0, -0.5)
      shape = custom polygon...
      size = (1, 1)
      startVal [time (s)] = 0
      units = cm
      vertices [set every frame] = shieldCoords
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    ImageComponent radioactive_move
      image = images/radioactive1.png
      pos = (0, -0.5)
      size = (2, 2)
      startVal [time (s)] = 0
      units = cm
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    TextComponent text_move_s1
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Your shield can be positioned anywhere on a circle around the harmful radiation source. To navigate the shield, use the "1" and "2" buttons on your response box. Try moving the shield now!
      wrapWidth = 1.5
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    TextComponent text_advance_move_s1
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        If you have understood how to move the shield,
        press button "3" to advance to the next screen.
    KeyboardComponent key_resp_move_s1
      allowedKeys = '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_mainTask
    TextComponent text_mainTask
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Are you ready to start the game?

        In the actual game:

        1. You will not see the reward bar - but the rules for earning money remain the same, and you will receive feedback about your reward after every block.

        2. We ask you to please focus your eyes on the centre of the radioactive source and don't follow the beams with your eyes. This is to minimise eye-movement artefacts in the MEG data.

        3. You will hear tones through your headphones while you play the game. These tones are completely unrelated to the task - you can ignore them and focus on catching the beams.

        Press button "3" to continue.
    KeyboardComponent key_resp_mainTask
      allowedKeys = '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceBlock
    CodeComponent code_practiceBlock
      Code Type = Auto->JS
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      Begin Routine:
        # this is phase 0 (practice)
        phaseN = 0
        blockID = 0

        # radioactive source image: yellow
        sourceImageFile = os.path.join(imageRoot,"radioactive1.png")
        volatility = 2

        # we do not present any tones in this block
        toneTrigger = 0
        toneVolatility = 0
        toneIndex = 0
        toneEndFrame = 0

        #load stimulusStream into NumPy array
        block_path = sequenceRoot + practiceBlockFile
        f = open(block_path, 'r')
        storedStream_np = []
        for line in f:
            words = line.split(',')
            storedStream_np.append((words[0], words[1], words[2]))

        # calculate the total number of frames in this block
        nFrames = len(storedStream_np) - 2
        currentFrame = 0

        #the ValueError: could not convert string to float error originates here
        #need to start reading from the 2nd row rather than the 1st row (with header text)
        #let's get rid of the first row since it's giving us headaches
        storedStream_np.pop(0)

        trueMean = float(storedStream_np[0][0])
        laserRotation = float(storedStream_np[0][1])
        trueVariance = float(storedStream_np[0][2])

        #initialise variables that will be updated as experiment progresses

        # send a trigger to mark the start of a main block
        triggerValue = triggers['begin_pract']
        sendTrigger = True
        send_trigger_pract(triggerValue)
        #start by sending a trigger when subject presses a button
        sendResponseTriggers = True
        totalReward = 1
        hit_i = 0
        first_hit = 0

        # reward bar variables
        #bar_length = 0.5
        top_amount = 1
        bottom_amount = 0.8
        #reward_change_colour = [1, -1, -1]
        top_amount_text = "£%.2f" %(top_amount)
        bottom_amount_text = "£%.2f" %(bottom_amount)

        # shield position
        shieldRotation = 360 #begin at top
        shieldDegrees = 20
        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5

        #calculate the screen X and Y locations that correspond to the shield centre
        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1
        shieldX = np.concatenate(([0],shieldX))
        shieldY = np.concatenate(([0],shieldY))
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        #update variables to draw polygon
        laserXcoord = CIRCLE_RADIUS*cos(deg2rad(laserRotation))
        laserYcoord = CIRCLE_RADIUS*sin(deg2rad(laserRotation))

        # laser variables
        unique, counts = np.unique(storedStream_np, return_counts=True)
        laser_on = min(counts)
        laser_frame_ct = 0

        laser_practice.setAutoDraw(False)
        laser_long_practice.setAutoDraw(False)

        #progress circle variables
        pc_orientation = 0
        pc_degrees = 0
        pc_X=np.sin(np.arange(np.radians(-pc_degrees),np.radians(pc_degrees),np.radians(10)/20))*CIRCLE_RADIUS*1.1
        pc_Y=np.cos(np.arange(np.radians(-pc_degrees),np.radians(pc_degrees),np.radians(10)/20))*CIRCLE_RADIUS*1.1
        pc_X = np.concatenate(([0],pc_X))
        pc_Y = np.concatenate(([0],pc_Y))
        pc_coords = np.transpose(np.vstack((pc_X,pc_Y)))
      Each Frame:
        #determine whether laser is crossing the shield
        if hit_i:
            hit_i = 0
        else:
            if first_hit:
                laser_long_practice.setAutoDraw(True)

        # never go to negative reward
        if totalReward <= 0:
            totalReward = 0.1
            top_amount = 0.1
            bottom_amount = 0.0
            top_amount_text = "£%.2f" %(top_amount)
            bottom_amount_text = "£%.2f" %(bottom_amount)

        # update reward bar if loss was above 0.2
        if bar_length <= 0:
            bar_length = 0.5;
            top_amount = top_amount - 0.2;
            bottom_amount = bottom_amount - 0.2;
            top_amount_text = "£%.2f" %(top_amount);
            bottom_amount_text = "£%.2f" %(bottom_amount);

        #do not send a trigger on every frame, only if laser position changes or subject presses a button
        sendTrigger = False
        keyReleaseThisFrame = False
        triggerValue = 0
        send_trigger_pract(triggerValue)
        #win.callOnFlip(trialTrigger_pract.setData, int(0))

        #first, find out if L/R keys have been *released*
        LRkeys_released = kb.getKeys(keyList=keys_move,clear=True,waitRelease=True)
        if len(LRkeys_released)>0: #if so, then flush out the keys one final time
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=True,waitRelease=False)
            triggerValue = triggers['key_release']
            sendTrigger = True
            send_trigger_pract(triggerValue)
            #win.callOnFlip(trialTrigger_pract.setData, int(triggerValue))
            keyReleaseThisFrame = True
        else: #otherwise, put the currently pressed keys into a list, finishing with the most recently pressed
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=False,waitRelease=False)

        #if key is pressed, rotate cursor
        #using most recently pressed key
        if len(LRkeys_pressed)>0:
            if LRkeys_pressed[-1]==key_right:
                shieldRotation += ROTATION_SPEED;
                newTriggerValue = triggers['key_right']
            if LRkeys_pressed[-1]==key_left:
                shieldRotation -= ROTATION_SPEED;
                newTriggerValue = triggers['key_left']
            if sendResponseTriggers:
                triggerValue = newTriggerValue
                sendTrigger = True
                send_trigger_pract(triggerValue)
                #win.callOnFlip(trialTrigger_pract.setData, int(triggerValue))
                #stop triggering responses until key has been released again
                sendResponseTriggers = False

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        shieldX = np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY = np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        if currentFrame<nFrames:
            laserRotation = float(storedStream_np[currentFrame][1])#storedStream_np[currentFrame,1];
            trueMean = float(storedStream_np[currentFrame][0])#storedStream_np[currentFrame,0];
            trueVariance = float(storedStream_np[currentFrame][2])#storedStream_np[currentFrame,2];
            if currentFrame > 0:
                if float(storedStream_np[currentFrame][1]) != float(storedStream_np[currentFrame-1][1]):#storedStream_np[currentFrame - 1, 1]:
                #if currentFrame > 1:
                    laser_frame_ct = 0;
                else:
                    laser_frame_ct = laser_frame_ct + 1;

                if laser_frame_ct <= laser_on:
                    laser_practice.setAutoDraw(True);
                    laser_long_practice.setAutoDraw(True);
                else:
                    laser_practice.setAutoDraw(False);
                    laser_long_practice.setAutoDraw(False);

        #calculate whether shield is currently hit by laser
        currentHit = (shieldRotation - laserRotation + shieldDegrees)%360 <= (2*shieldDegrees);

        #determine whether laser position has changed
        if currentFrame == 0:
            if not sendTrigger:
                #we'll send different stim change triggers depending on hit/no-hit
                if currentHit:
                    triggerValue = triggers['laser_hit']
                else:
                    triggerValue = triggers['laser_miss']

                sendTrigger = True
                send_trigger_pract(triggerValue)
                #win.callOnFlip(trialTrigger_pract.setData, int(triggerValue))

            if currentHit:
                totalReward = totalReward
                red_bar_length = 0
                hit_i = 1
                first_hit = 1
            else:
                if totalReward > 0:
                    totalReward = totalReward - lossFactor
                    bar_length = bar_length - 2.5*lossFactor
                    red_bar_length = 2.5*lossFactor
                else:
                    totalReward = 0
                    bar_length = 0.00001
                    red_bar_length = 0

        if currentFrame > 0:
            if float(storedStream_np[currentFrame][1]) != float(storedStream_np[currentFrame-1][1]):
                #we only send a stimulus trigger if we don't already have a response to send
                if not sendTrigger:
                    #we'll send different stim change triggers depending on hit/no-hit
                    if currentHit:
                        triggerValue = triggers['laser_hit']
                    else:
                        triggerValue = triggers['laser_miss']

                    sendTrigger = True
                    send_trigger_pract(triggerValue)
                    #win.callOnFlip(trialTrigger_pract.setData, int(triggerValue))

                if currentHit:
                    totalReward = totalReward
                    red_bar_length = 0
                    hit_i = 1
                    first_hit = 1
                else:
                    if totalReward > 0:
                        totalReward = totalReward - lossFactor
                        bar_length = bar_length - 2.5*lossFactor
                        red_bar_length = 2.5*lossFactor
                    else:
                        totalReward = 0
                        bar_length = 0.00001
                        red_bar_length = 0

        #update the shieldRedness according to whether we are currently hitting/missing the shield
        if currentHit:
            laser_long_opacity = 0;
            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];
        else:
            laser_long_opacity = 1
            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];

        if keyReleaseThisFrame:
            sendResponseTriggers = True

        if currentFrame<nFrames:
            saveData.append([phaseN,blockID,currentFrame,laserRotation,
                shieldRotation,shieldDegrees,currentHit,totalReward,
                sendTrigger,triggerValue,trueMean,trueVariance,volatility,
                toneTrigger,toneVolatility,toneIndex,toneEndFrame])
            currentFrame = currentFrame + 1;
        else:
            triggerValue = triggers['last_frame']
            sendTrigger = True
            send_trigger_pract(triggerValue)
            #win.callOnFlip(trialTrigger_pract.setData, int(triggerValue))

        pc_orientation = pc_orientation + (360/nFrames)/2;
        pc_degrees = pc_degrees + (360/nFrames)/2;
        pc_X=np.sin(np.arange(np.radians(-pc_degrees),np.radians(pc_degrees),np.radians(10)/20))*CIRCLE_RADIUS*1.1;
        pc_Y=np.cos(np.arange(np.radians(-pc_degrees),np.radians(pc_degrees),np.radians(10)/20))*CIRCLE_RADIUS*1.1;
        pc_X = np.concatenate(([0],pc_X));
        pc_Y = np.concatenate(([0],pc_Y));
        pc_coords = np.transpose(np.vstack((pc_X,pc_Y)));
      End Routine:
        # this block will not count towards the total reward
        #totalReward_tot = totalReward_tot + totalReward
        totalReward_text = "£%.2f" %(totalReward)

        # save the output data for this block
        np.savetxt(saveFilename,saveData,delimiter=",",fmt="%s")
        #win.callOnFlip(trialTrigger_pract.setData, int(0))
        triggerValue = 0
        send_trigger_pract(triggerValue)
        sendTrigger = False
    PolygonComponent harmless_area_practice
      fillColor = $[0, 0, 0]
      lineColor = $[0, 0, 0]
      shape = circle
      size = (6.6, 6.6)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
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    PolygonComponent shield_practice
      fillColor [set every frame] = $shieldColour
      lineColor [set every frame] = $[0, 0, 0]
      ori [set every frame] = shieldRotation
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices [set every frame] = shieldCoords
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    PolygonComponent shield_centre_practice
      fillColor = blue
      lineColor = blue
      lineWidth = 3
      ori [set every frame] = shieldRotation
      pos [set every frame] = (0, 0)
      shape = custom polygon...
      size = (1, 1)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices = [[0, 0], [0, CIRCLE_RADIUS*1.2]]
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    PolygonComponent shield_bg_short_practice
      fillColor [set every frame] = $[0, 0, 0]
      lineColor [set every frame] = $[0, 0, 0]
      ori [set every frame] = shieldRotation
      shape = custom polygon...
      size = (1, 1)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices [set every frame] = shieldCoords
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    PolygonComponent laser_practice
      fillColor = red
      lineColor = red
      lineWidth = 10
      ori [set every frame] = laserRotation
      pos [set every repeat] = (0, 0)
      shape = custom polygon...
      size [set every repeat] = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices [set every frame] = [[0, 0], [0, CIRCLE_RADIUS*1.1]]
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    PolygonComponent laser_long_practice
      fillColor = red
      lineColor = red
      lineWidth = 10
      opacity [set every frame] = laser_long_opacity
      ori [set every frame] = laserRotation
      pos [set every repeat] = (0, 0)
      shape = custom polygon...
      size [set every repeat] = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices [set every frame] = [[0, 0], [0, CIRCLE_RADIUS*1.4]]
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    PolygonComponent progress_bar_practice
      fillColor = white
      lineColor = green
      lineWidth = 10
      ori [set every frame] = pc_orientation
      shape = custom polygon...
      size = (0.3, 0.3)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices [set every frame] = pc_coords
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    PolygonComponent reward_bar_red
      anchor = bottom-center
      fillColor [set every frame] = $reward_change_colour
      lineColor [set every frame] = $reward_change_colour
      pos [set every frame] = (0.6, -0.3+bar_length)
      shape = rectangle
      size [set every frame] = (0.05, red_bar_length)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
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    PolygonComponent reward_bar
      anchor = bottom-center
      fillColor = blue
      lineColor = blue
      pos = (0.6, -0.3)
      shape = rectangle
      size [set every frame] = (0.05, bar_length)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
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    ImageComponent radioactive_practice
      color = $[1, 1, 1]
      image [set every repeat] = $sourceImageFile
      size = (2, 2)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
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    TextComponent reward_text_top
      letterHeight = 0.05
      pos = (0.6, 0.25)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      text [set every frame] = $top_amount_text
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    TextComponent reward_text_bottom
      letterHeight = 0.05
      pos = (0.6, -0.35)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      text [set every frame] = $bottom_amount_text
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    ParallelOutComponent trialTrigger_pract
      address = 0x4FF8
      durationEstim = 0.01
      register = EIO
      startData = $triggerValue
      startEstim = 0
      startVal [condition] = $sendTrigger==True
      stopData = 0
      stopVal [duration (frames)] = 0.5
      syncScreen = True
      syncScreenRefresh = True
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  Routine afterPractice
    TextComponent after_practice_explanation
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Well done - this was the practice block!

        As you have seen, the direction of the beams can jump around quickly, and you cannot catch all beams with your shield. That's ok - just try to catch as many as possible. The source will have a main direction of attack at any point - if you place your shield in that direction, you will catch most beams.

        Moving your shield also costs energy, which will be subtracted from your reward. It is thus important that you only move your shield when you think that the main direction of attack has changed.

        Press button "3" to continue.
    KeyboardComponent key_resp_afterPractice
      allowedKeys = '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions_game
  Routine practice_move
  Routine reward
  Routine instructions_practiceBlock
  Routine practiceBlock
  Routine afterPractice
  Routine instructions_mainTask
  Routine radio_colours
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $sessionFileName
    loopType = sequential
    nReps = 1
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    Routine blockStartText
    Routine trial
    Routine blockEndText
  LoopTerminator blocks
  Routine sessionEndText
